PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = stroop experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine CN_instructions2
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Ok, now you get the idea. Let's start the formal task, press 'SPACEBAR' to continue.

        **Go as fast as you can while being accurate**

        Remember, name the ink color, not what the word says!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CN_instructions1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Task 1:

        In this task, you will see some color words (e.g. mother). The words are printed in other ink colors, for example, you may see the word 'book' is printed in blue. Your job is to name the ink color of the word regardless of what the word says. Please indicate your response by pressing the initial letter of that color. For example, if you see the word 'book' printed in blue, please press b on your keyboard. Similarly, if you see the word 'computer' printed in pink, please press p on your keyboard.

        press 'SPACEBAR' to do practice trials.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CNend
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = .5
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      text:
        Task 1 complete.


        press 'SPACEBAR' to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GC_instructions1
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Task 2:

        In this task, you will see some color words (e.g. mother). The words are printed in other ink colors, for example, you may see the word 'mother' is printed in pink. Your job is to determine whether the presented word belongs to the category 'male' and 'female', ignoring the ink color. Please indicate your response by pressing the initial letter of that color. For example, if you see the word 'mother', please press f on your keyboard. Similarly, if you see the word 'brother', please press m on your keyboard.


        Press 'SPACEBAR' to do some practice trials.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine final_message
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Task 2 Complete.

        You have finished the study, thank you!
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GC_instructions2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Press the 'f' key for words in the female category, and the 'm' key for words in the male category. Ignore the color of the word!

        If you are ready, press the 'SPACEBAR' to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine colornaming
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    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'b','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine gendercategorization
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    TextComponent trial_task_2_text
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_5
      allowedKeys = 'f','m'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine CNpracticetrials
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    TextComponent practicetask1
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    KeyboardComponent practicetaskkeys
      allowedKeys [set every repeat] = 'p','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine GCpracticetrials
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    TextComponent text_6
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    KeyboardComponent key_resp_8
      allowedKeys = 'f','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine CN_instructions1
  LoopInitiator CNpractice loopType="TrialHandler"
    conditionsFile = practiceCN.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'female', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'p'},
      {'word': 'boy', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'husband', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'niece', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'mother', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'p'}]
    Routine CNpracticetrials
  LoopTerminator CNpractice
  Routine CN_instructions2
  LoopInitiator CNtrials loopType="TrialHandler"
    conditionsFile = conditionsCN.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'female', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'p'},
      {'word': 'uncle', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'aunt', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'girl', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'p'},
      {'word': 'gentleman', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'p'},
      {'word': 'grandpa', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'son', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'wife', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'male', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'p'},
      {'word': 'father', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'daughter', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'p'},
      {'word': 'damsel', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'handsome', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'b'},
      {'word': 'sister', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 1, 'GC': 0, 'corrAns': 'p'}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
    Routine colornaming
  LoopTerminator CNtrials
  Routine CNend
  Routine GC_instructions1
  LoopInitiator GCpractice loopType="TrialHandler"
    conditionsFile = practiceGC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'aunt', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'dad', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'female', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'mother', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'man', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'm'}]
    Routine GCpracticetrials
  LoopTerminator GCpractice
  Routine GC_instructions2
  LoopInitiator GCtrials loopType="TrialHandler"
    conditionsFile = conditionsGC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'aunt', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'uncle', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'dad', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'guy', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'damsel', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'mother', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'female', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'nephew', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'sister', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'man', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'wife', 'color': 'blue', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'man', 'color': 'pink', 'congruent': 0, 'incongruent': 1, 'CN': 0, 'GC': 1, 'corrAns': 'm'},
      {'word': 'girls', 'color': 'pink', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'f'},
      {'word': 'father', 'color': 'blue', 'congruent': 1, 'incongruent': 0, 'CN': 0, 'GC': 1, 'corrAns': 'm'}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
    Routine gendercategorization
  LoopTerminator GCtrials
  Routine final_message
